CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:eb6fa7a7e
ModuleCount:10
HasImagePlaneDetails:False

Crop:[module_num:1|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notes:['Crop the DAPI image down to a 200 x 200 rectangle by entering specific coordinates.']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
    Select the input image:OrigBlue
    Name the output image:CropBlue
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:501,700
    Top and bottom rectangle positions:251,450
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:2|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notes:['Use the same cropping from the DAPI image for FITC image.']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
    Select the input image:OrigGreen
    Name the output image:CropGreen
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:Edges
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    Select the image with a cropping mask:CropBlue
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
Crop:[module_num:3|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notes:['Use the same cropping from the DAPI image for the rhodamine image.']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
    Select the input image:OrigRed
    Name the output image:CropRed
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:Edges
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    Select the image with a cropping mask:CropBlue
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
IdentifyPrimaryObjects:[module_num:4|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notes:['Identify the nuclei from the DAPI image. Three-class thresholding performs better than the default two-class thresholding in this case.']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
    Select the input image:CropBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifySecondaryObjects:[module_num:5|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notes:['Identify the cells by using the nuclei as a "seed" region, then growing outwards until stopped by the image threshold or by a neighbor. The Propagation method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CropGreen
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
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
IdentifyTertiaryObjects:[module_num:6|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notes:['Identify the cytoplasm by "subtracting" the nuclei objects from the cell objects.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:7|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notes:['Measure morphological features from the cell, nuclei and cytoplasm objects.']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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:8|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notes:['Measure intensity features from nuclei and cell objects against the cropped DAPI image.']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
    Hidden:1
    Select an image to measure:CropBlue
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm

MeasureTexture:[module_num:9|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notes:['Measure texture features of the nuclei, cells and cytoplasm from the cropped DAPI image.']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
    Hidden:1
    Hidden:3
    Hidden:1
    Select an image to measure:CropBlue
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Texture scale to measure:3
    Measure images or objects?:Both

GrayToColor:[module_num:10|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notes:['Combine the cropped grayscale channels into a color RGB image.']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
    Select a color scheme:RGB
    Select the image to be colored red:CropRed
    Select the image to be colored green:CropGreen
    Select the image to be colored blue:CropBlue
    Name the output image:RGBImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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